---
API: 3
OpenSesame: 4.0.28
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title images_presentation
set subject_parity even
set subject_nr 0
set start images_presentation
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/run/media/najem/resstuff/co_adaptation_pilot/1.client/0.training"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad ITI
	set duration 8500
	set description "Waiting period between experimental trials"
	draw fixdot color=red show_if=always style=default x=0 y=0 z_index=0

define inline_script ITI_onset_time
	set description "Track Inter Stimulus Interval (I.T.I.) onset time"
	___run__
	var.ITI_onset_time = clock.time() - var.run_onset_time
	__end__
	set _prepare ""

define inline_script ITI_script
	set description "Executes Python code"
	___run__
	user_response = 0
	random_idxs = [i for i in range(1, 13)] # Living images indexes
	random.shuffle(random_idxs)
	idx = random_idxs.pop(-1)
	print("the idx is:",idx)
	
	 
	
	
	keyboard_time = 2000
	fix_point_full_time = 8500
	key_response_wait_time = 2000
	
	canvas =  Canvas()#background_color=(50,50,50)
	
	
	if idx in [i for i in range(1, 13)]:
		key_response = Keyboard(keylist=['1']) # Keyboard(keylist=['0','1', '2', '3', '4', '5', '6', '7', '8', '9'], timeout=3000)
		
		clock.sleep(keyboard_time)
		
		canvas.clear()
		canvas.fixdot(color='green')
		canvas.show()
		
		user_response,user_response_time = key_response.get_key(timeout=key_response_wait_time)
		
		fix_point_time = fix_point_full_time - keyboard_time
	
		canvas.clear()
		canvas.fixdot(color='red')
		canvas.show()
		clock.sleep(fix_point_time)
		print("user response time:",user_response_time)
		print("user response:", user_response)
	else:
		canvas.clear()
		canvas.fixdot(color='red')
		canvas.show()
		clock.sleep(fix_point_full_time)
	
		
	var.ITI_offset_time = clock.time() - var.run_onset_time
	var.ITI_actual_time = var.ITI_offset_time - var.ITI_onset_time
	__end__
	set _prepare ""

define sequence blink_trial_seq
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run new_img always
	run img_presentation always
	run wait always

define loop blinking_trial
	set source_file ""
	set source table
	set repeat 12
	set order random
	set description "Show 12 images sequentially per trial"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run blink_trial_seq

define sequence experiment_seq
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run trial_onset_time always
	run shuffle_images always
	run blinking_trial always
	run ITI_onset_time always
	run ITI_script True
	run post_ITI_fixation always
	run trial_offset_time always
	run new_logger True

define loop experiment_stimuli
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Category of images that will be used in this example model construction paradigm"
	set cycles 14
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 concept living
	setcycle 1 concept living
	setcycle 2 concept living
	setcycle 3 concept living
	setcycle 4 concept living
	setcycle 5 concept living
	setcycle 6 concept living
	setcycle 7 concept non_living
	setcycle 8 concept non_living
	setcycle 9 concept non_living
	setcycle 10 concept non_living
	setcycle 11 concept non_living
	setcycle 12 concept non_living
	setcycle 13 concept non_living
	run experiment_seq

define sketchpad fMRI_heatup
	set duration 10000
	set description "With a Repetition Time (TR) of 2 seconds, wait for 5 volumes for image stabilization (fMRI heatup). Then, this volumes will be discarded during model construction pre-processing."
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define keyboard_response fMRI_heatup_firstvolume
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "With the first fMRI volume start the experimental run by triggering letter 's' from a trigger box"
	set allowed_responses s

define sketchpad fMRI_heatup_message
	set duration 1
	set description "Show a waiting message during fMRI heatup volumes"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="wait..." x=0 y=0 z_index=0

define sketchpad first_trial_fixation
	set duration 1500
	set description "Visual fixation before first trial"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define inline_script global_variables
	set description "Global variables"
	set _run ""
	___prepare__
	var.new_img = ''
	## resolution 1024 px X768 px
	## resolution 1920 px 1080 px
	__end__

define sequence images_presentation
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run global_variables always
	run fMRI_heatup_message always
	run fMRI_heatup_firstvolume always
	run run_onset_time always
	run fMRI_heatup always
	run first_trial_fixation always
	run experiment_stimuli always
	run run_offset_time always
	run new_logger True

define sketchpad img_presentation
	set duration 750
	set description "Present image"
	draw image center=1 file="[new_img]" scale=0.9 show_if=always x=0 y=0 z_index=0

define inline_script new_img
	set description "Select a new image"
	set _run ""
	___prepare__
	if var.concept == 'living':
	    new_img = living_idxs.pop(-1)
	    var.new_img = new_img + '.jpg'
	    
	if var.concept == 'non_living':
	    new_img = non_living_idxs.pop(-1)
	    var.new_img = new_img + '.jpg'
	    
	if var.concept == 'patterns':
	    new_img = patterns_idxs.pop(-1)
	    var.new_img = 'patterns_' + str(new_img) + '.jpg'
	 
	if var.concept == 'gaussian':
	    new_img = gaussian_idxs.pop(-1)
	    var.new_img = 'gaussian_' + str(new_img) + '.jpg'
	__end__

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad post_ITI_fixation
	set duration 1500
	set description "Visual fixation before each trial"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=832 y=-224 z_index=0

define inline_script run_offset_time
	set description "Track run offset time"
	set _run "var.run_offset_time = clock.time() - var.run_onset_time"
	set _prepare ""

define inline_script run_onset_time
	set description "Track run onset time"
	___run__
	var.run_onset_time = clock.time()
	__end__
	set _prepare ""

define inline_script shuffle_images
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Get images indexes
	#from numpy import random
	import random
	
	living_idxs = ['dog_' + str(i) for i in range(1, 13)] # Living images indexes
	non_living_idxs = ['scissors_' + str(i) for i in range(1, 13)] # Non-living images indexes
	gaussian_idxs = list(range(0, 60)) # Gaussian noise images indexes
	patterns_idxs = list(range(0, 60)) # Pattern noise images indexes
	
	
	# Shuffle image presentation
	random.shuffle(living_idxs)
	random.shuffle(non_living_idxs)
	random.shuffle(gaussian_idxs)
	random.shuffle(patterns_idxs)
	print(living_idxs)
	print(non_living_idxs)
	__end__

define inline_script trial_offset_time
	set description "Executes Python code"
	___run__
	var.trial_offset_time = clock.time() - var.run_onset_time
	__end__
	set _prepare ""

define inline_script trial_onset_time
	set description "Track trial onset time"
	___run__
	var.trial_onset_time = clock.time() - var.run_onset_time
	__end__
	set _prepare ""

define sketchpad wait
	set duration 250
	set description "Wait for 250ms between images presentation"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

